PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mytask
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Routines
  Routine trial
    CodeComponent code0
      Code Type = Auto->JS
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      Begin Experiment:
        total_earned = 0
      Begin Routine:
        break
        if total_earned == 0:
            delay_msg = ""
        else:
            delay_msg = "today" if Attr_Delay == 0 else "in %d days"%(Attr_Delay)
            delay_msg = "You will receive your payment %s."%(delay_msg)
        trial_msg = "You're advertising to %s\nTotal sum %d points.\n%s"%(Attr_Name, total_earned, delay_msg)
    ImageComponent attr_image
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent stim_left
      image [set every repeat] = $Item_Image_Left
      pos = (-0.4, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent stim_right
      image [set every repeat] = $Item_Image_Right
      pos = (0.4, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent trial_text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $trial_msg
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right'
      correctAns = $Correct_Answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent instruct1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this task, you will be a designer trying to sell your designs to different client companies.

        In this session, you will be presented with different pairs of items. Through trial and error you'll need to learn which designs are preferred by the clients.

        Press a key when ready.
    KeyboardComponent instruct_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        from collections import defaultdict
        feedback_msg='doh!'#if this comes up we forgot to update the msg!
        MEANTRIALS = 10
        MINPERF = 0.7 # minimum acceptable performance in the last trials before moving on
        MYREWARD = 1

        correct_responses = defaultdict(int)
      Begin Routine:
        if Session_Type == 'testing':
            feedback_msg = ' '
        elif not trial_resp.keys :
            feedback_msg="Failed to respond"
        elif trial_resp.corr:#stored on last run routine
            correct_responses[Item1_Name + '<>' + Item_Name2] += 1
            feedback_msg = "Correct answer. \nYou've earned %i point!" %(MYREWARD)
            total_earned += MYREWARD
            print(correct_responses)
        else:
            feedback_msg = "Wrong answer!"
      End Routine:
        #if trial_resp.keys is not None and len(trial_resp.keys)>0 :
        #    nrows = np.min((trials_1.thisIndex + 1, MEANTRIALS))
        #    meanCorr = trials_1.data['trial_resp.corr'].mean()
        #    #meanRt = trials.data['trial_resp.rt'].mean()
        #    if meanCorr > MINPERF and trials_1.thisIndex > MEANTRIALS:
        #        trials_1.finished=True
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_msg
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  Routine prep
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        inner_trials_1.trialList = trials_1.trialList[trials_1.thisN]
  Routine instructions2
    ImageComponent image
      image = ..\images\items\all-tshirts.jpg
      pos = (0, -0.1)
      size = (1.4, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please take some time to get acquainted with the following items:
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    KeyboardComponent instruct2_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_message
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks!
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  Routine rating
    ImageComponent rating_attr
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    ImageComponent rating_item
      image [set every repeat] = $Item_Image
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_resp
      forceEndRoutine = True
      high = 1
      low = 0
      pos = 0, -0.5
      scaleDescription = How much does the shop like this item?
      size = 1.0
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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Flow
  Routine instructions
  Routine instructions2
  LoopInitiator outer_trials_1 loopType="TrialHandler"
    conditionsFile = ..\choices\choice_tables.csv
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_1 loopType="TrialHandler"
      conditionsFile = $choice_table
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials_1
  LoopTerminator outer_trials_1
  LoopInitiator outer_trials_2 loopType="TrialHandler"
    conditionsFile = ..\ratings\rating_tables.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_table', '..\\ratings\\rating_table_context1_attr1.csv')]),
      OrderedDict([('rating_table', '..\\ratings\\rating_table_context1_attr2.csv')]),
      OrderedDict([('rating_table', '..\\ratings\\rating_table_context2_attr1.csv')]),
      OrderedDict([('rating_table', '..\\ratings\\rating_table_context2_attr2.csv')])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $rating_table
      loopType = sequential
      nReps = 1
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      Routine rating
    LoopTerminator trials_2
  LoopTerminator outer_trials_2
  Routine end_message
