PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mytask
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Routines
  Routine trial
    ImageComponent attr_image
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent stim_left
      image [set every repeat] = $Item_Image_Left
      pos = (-0.4, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent stim_right
      image [set every repeat] = $Item_Image_Right
      pos = (0.4, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent trial_text
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Select the item most attractive to the retailers.
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right'
      correctAns = $Correct_Answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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  Routine feedback
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prep
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        inner_trials_1.trialList = trials_1.trialList[trials_1.thisN]
  Routine end_message
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks!
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  Routine rating
    ImageComponent rating_attr
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    ImageComponent rating_item
      image [set every repeat] = $Item_Image
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent rating_attr_name
      letterHeight = 0.1
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Attr_Name
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    RatingScaleComponent rating_resp
      forceEndRoutine = True
      high = 1
      labels = 0, 1
      low = 0
      pos = 0, -0.5
      scaleDescription = From 0 to 1, how much does the retailer want this item?
      size = 1.5
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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  Routine instructions_ratings
    TextComponent text_instructions_ratings
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome back!

        Now you will be asked to rate the items according to how much you think the retailer is interested in them, from 0 (not interested) to 1 (very interested).

        Press a key when ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_choices3
    ImageComponent instructions3_image1
      image [set every repeat] = $inst_all_image
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent instructions3_text
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        These are the items you will be showing to the retailer.

        Please take some time to get acquainted with them.

        Press space when ready.
    KeyboardComponent instructions3_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_choices2
    TextComponent intructions2_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You want to collect as many points as you can, because the points will eventually be converted into money (1 point = 0.2 \$). Thus, you will earn points by learning the preferences of the retailer.

        The retailers may sometimes change their preferred item in different trials  when they don't have a strong preference for one of the items in the pair.

        Use the left and right arrows to choose the correct item.

        You have a maximum of 5 seconds to respond each time.

        Press space to continue.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_choices2_2
    TextComponent instructions1_text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In this last part, you will be shown again different pairs of the previous items. Considering that you are equally likely to get orders from either retailer, select the item that should give you the highest profit. You will need to consider the preferences of both retailers and select the item that on average is more valuable.

        At the end, from all the pairs where you selected the correct (most valuable) item, one of them will be randomly selected and you will be rewarded with its value, which lies between 0 and 20 \$. Therefore, you are interested in picking the most valuable item in each pair.

        Use the left and right arrows to choose the item you think is most valuable.

        You have a maximum of 5 seconds to respond each time.

        Press space to continue.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instructions1_image1
      image = ..\images\store1.jpg
      pos = (-0.4, -0.3)
      size = (1.6/3, 0.9/3)
      startVal [time (s)] = 0.0
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    ImageComponent instructions2_image2
      image = ..\images\store2.jpg
      pos = (0.4,-0.3)
      size = (1.6/3, 0.9/3)
      startVal [time (s)] = 0.0
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    TextComponent label1
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = ABC stores
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    TextComponent label2
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = CBA stores
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Flow
  Routine instructions_ratings
  LoopInitiator outer_trials1 loopType="TrialHandler"
    conditionsFile = ..\ratings\rating_tables.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_1 loopType="TrialHandler"
      conditionsFile = $rating_table
      loopType = sequential
      nReps = 1
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      Routine rating
    LoopTerminator trials_1
  LoopTerminator outer_trials1
  Routine instructions_choices2_2
  LoopInitiator outer_trials_2 loopType="TrialHandler"
    conditionsFile = ..\choices\choice_tables_testing.csv
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $choice_table_testing
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials_2
  LoopTerminator outer_trials_2
  Routine end_message
