PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mytask
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Routines
  Routine trial
    CodeComponent code0
      Code Type = Auto->JS
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      Begin Experiment:
        total_earned = 0
      Begin Routine:
        if total_earned == 0:
            delay_msg = ""
        else:
            delay_msg = "today" if Attr_Delay == 0 else "in %d days"%(Attr_Delay)
            delay_msg = "You will receive your payment %s."%(delay_msg)
        trial_msg = "You're showing your designs to %s\nYou have earned %d points so far.\n%s"%(Attr_Name, total_earned, delay_msg)
    ImageComponent attr_image
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent stim_left
      image [set every repeat] = $Item_Image_Left
      pos = (-0.4, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent stim_right
      image [set every repeat] = $Item_Image_Right
      pos = (0.4, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent trial_text
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $trial_msg
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right'
      correctAns = $Correct_Answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        from collections import defaultdict
        feedback_msg='doh!'#if this comes up we forgot to update the msg!
        MEANTRIALS = 10
        MINPERF = 0.7 # minimum acceptable performance in the last trials before moving on
        MYREWARD = 1

        correct_responses = defaultdict(int)
      Begin Routine:
        if Session_Type == 'testing':
            feedback_msg = ' '
        elif not trial_resp.keys :
            feedback_msg="Failed to respond"
        elif trial_resp.corr:#stored on last run routine
            correct_responses[Item1_Name + '<>' + Item2_Name] += 1
            feedback_msg = "Correct answer. \nYou've earned %i point!" %(MYREWARD)
            total_earned += MYREWARD
            print(correct_responses)
        else:
            feedback_msg = "Wrong answer!"
      End Routine:
        #if trial_resp.keys is not None and len(trial_resp.keys)>0 :
        #    nrows = np.min((trials_1.thisIndex + 1, MEANTRIALS))
        #    meanCorr = trials_1.data['trial_resp.corr'].mean()
        #    #meanRt = trials.data['trial_resp.rt'].mean()
        #    if meanCorr > MINPERF and trials_1.thisIndex > MEANTRIALS:
        #        trials_1.finished=True
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_msg
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  Routine prep
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        inner_trials_1.trialList = trials_1.trialList[trials_1.thisN]
  Routine end_message
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks!
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  Routine rating
    ImageComponent rating_attr
      image [set every repeat] = $Attr_Image
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    ImageComponent rating_item
      image [set every repeat] = $Item_Image
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_resp
      forceEndRoutine = True
      high = 10
      low = 0
      pos = 0, -0.5
      scaleDescription = From 0 to 10, how much does the retailer want this item?
      size = 1.0
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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  Routine instructions_ratings
    TextComponent text_instructions_ratings
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will be asked to rate the items from 0 to 10, according to how much you think the retailer likes the item.

        Press a key when ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_choices3
    ImageComponent instructions3_image1
      image [set every repeat] = $inst_all_image
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent instructions3_text
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        These are the items you will be showing to the retailer.

        Please take some time to get acquainted with them.

        Press space when ready.
    KeyboardComponent instructions3_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_choices1
    TextComponent instructions1_text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this task, you are a clothes designer trying to sell your designs to two different retailers: ABC stores and CBA stores.

        In this session, you will be shown different pairs of items. Every time you pick one item you will be told if that is the preferred one by the retailer, and if that is the case you will get one point. You will be shown the same pair of items several times in a row.

        Press space to continue.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instructions1_image1
      image = ..\images\store1.jpg
      pos = (-0.4, -0.3)
      size = (1.6/3, 0.9/3)
      startVal [time (s)] = 0.0
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    ImageComponent instructions2_image2
      image = ..\images\store2.jpg
      pos = (0.4,-0.3)
      size = (1.6/3, 0.9/3)
      startVal [time (s)] = 0.0
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    TextComponent label1
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = ABC stores
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    TextComponent label2
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = CBA stores
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  Routine instructions_choices2
    TextComponent intructions2_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You want to collect as many points as you can, because the points will eventually be converted into money (1 point = 0.2 \$). Thus, you will earn points by learning the preferences of the retailer.

        The retailers may sometimes change their preferred item in different trials  when they don't have a strong preference for one of the items in the pair.

        Use the left and right arrows to choose the correct item.

        You have a maximum of 5 seconds to respond each time.

        Press space to continue.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_choices1
  Routine instructions_choices2
  LoopInitiator outer_trials_1 loopType="TrialHandler"
    conditionsFile = ..\choices\choice_tables.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('choice_table', '..\\choices\\choice_table_context1_attr1.csv'), ('inst_attr_image', '..\\images\\store1.jpg'), ('inst_all_image', '..\\images\\items\\all-context1.png')]),
      OrderedDict([('choice_table', '..\\choices\\choice_table_context1_attr2.csv'), ('inst_attr_image', '..\\images\\store2.jpg'), ('inst_all_image', '..\\images\\items\\all-context1.png')]),
      OrderedDict([('choice_table', '..\\choices\\choice_table_context2_attr1.csv'), ('inst_attr_image', '..\\images\\store1.jpg'), ('inst_all_image', '..\\images\\items\\all-context2.png')]),
      OrderedDict([('choice_table', '..\\choices\\choice_table_context2_attr2.csv'), ('inst_attr_image', '..\\images\\store2.jpg'), ('inst_all_image', '..\\images\\items\\all-context2.png')])]
    Routine instructions_choices3
    LoopInitiator trials_1 loopType="TrialHandler"
      conditionsFile = $choice_table
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials_1
  LoopTerminator outer_trials_1
  Routine end_message
